# Generated by Configurator on Thu Nov 15 10:45:20 PST 2018

# Reset
Property,Core,Initialize,0

# Devices
Device,COM3,SerialManager,COM3
Device,IDS uEye,IDS_uEye,IDS uEye
Device,FreeSerialPort,FreeSerialPort,FreeSerialPort

# Pre-init settings for devices
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,9600
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,FreeSerialPort,Port,COM3

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,IDS uEye
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: System
# Preset: Startup
ConfigGroup,System,Startup,IDS uEye,Exposure,0.5005
ConfigGroup,System,Startup,IDS uEye,Frame Rate,1.0000



# PixelSize settings

